CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|svn_version:\'Unknown\'|variable_revision_number:2|show_window:False|notes:\x5B\'To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    :
    Filter images?:Images only
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "\x5B\\\\\\\\\\\\\\\\/\x5D\\\\\\\\.")

Metadata:[module_num:2|svn_version:\'Unknown\'|variable_revision_number:4|show_window:False|notes:\x5B\'The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Extract metadata?:No
    Metadata data type:Text
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_(?P<Well>\x5BA-P\x5D\x5B0-9\x5D{2})_s(?P<Site>\x5B0-9\x5D)_w(?P<ChannelNumber>\x5B0-9\x5D)
    Regular expression:(?P<Date>\x5B0-9\x5D{4}_\x5B0-9\x5D{2}_\x5B0-9\x5D{2})$
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:
    Match file and image metadata:\x5B\x5D
    Use case insensitive matching?:No

NamesAndTypes:[module_num:3|svn_version:\'Unknown\'|variable_revision_number:5|show_window:False|notes:\x5B\'The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
    Match metadata:\x5B\x5D
    Image set matching method:Order
    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
    Select the rule criteria:and (file does contain "")
    Name to assign these images:DNA
    Name to assign these objects:Cell
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Retain outlines of loaded objects?:No
    Name the outline image:LoadedOutlines

Groups:[module_num:4|svn_version:\'Unknown\'|variable_revision_number:2|show_window:False|notes:\x5B\'The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Do you want to group your images?:No
    grouping metadata count:1
    Metadata category:None

Morph:[module_num:5|svn_version:\'Unknown\'|variable_revision_number:4|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:DNA
    Name the output image:morphed
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
    Repetition number:2
    Scale:5
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
    Rescale values from 0 to 1?:Yes

IdentifyPrimaryObjects:[module_num:6|svn_version:\'Unknown\'|variable_revision_number:10|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:morphed
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):4,8
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:PrimaryOutlines
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
    Enter Laplacian of Gaussian threshold:0.5
    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
    Enter LoG filter diameter:5.0
    Handling of objects if excessive number of objects identified:Continue
    Maximum number of objects:500
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:.13,1
    Approximate fraction of image covered by objects?:0.01
    Manual threshold:0.0
    Select the measurement to threshold with:None
    Select binary image:None
    Masking objects:None
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Method to calculate adaptive window size:Image size
    Size of adaptive window:10
