CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Morph:[module_num:5|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
    Select the input image:DNA
    Name the output image:tophat
    Select the operation to perform:tophat
    Number of times to repeat operation:Custom
    Repetition number:2
    Scale:4.75
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:tophat
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):2,8
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:.11,1
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskImage:[module_num:7|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enabled:False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
    Select the input image:tophat
    Name the output image:masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:9|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
    Name the output objects:filter_attempt
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:8
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.5
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:.949
    Select the measurement to filter by:AreaShape_Extent
    Filter using a minimum measurement value?:Yes
    Minimum value:.534
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.52
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:8.9
    Select the measurement to filter by:AreaShape_Perimeter
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:26
    Select the measurement to filter by:AreaShape_Solidity
    Filter using a minimum measurement value?:Yes
    Minimum value:.81
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Zernike_0_0
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:filter_attempt
    Name the output image:CellImage
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:CellImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:12|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Nuclei|Number_Object_Number,Nuclei|Location_Center_Y,Nuclei|Location_Center_X,Nuclei|AreaShape_Perimeter,Nuclei|AreaShape_Orientation,Nuclei|AreaShape_Center_Y,Nuclei|AreaShape_Center_X,Nuclei|AreaShape_MajorAxisLength,Nuclei|AreaShape_MinFeretDiameter,Nuclei|AreaShape_Solidity,Nuclei|AreaShape_MaxFeretDiameter,Nuclei|AreaShape_EulerNumber,Nuclei|AreaShape_Zernike_1_1,Nuclei|AreaShape_Zernike_0_0,Nuclei|AreaShape_Zernike_3_1,Nuclei|AreaShape_Zernike_3_3,Nuclei|AreaShape_Zernike_2_0,Nuclei|AreaShape_Zernike_2_2,Nuclei|AreaShape_Zernike_5_1,Nuclei|AreaShape_Zernike_5_3,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::export_filter
    Overwrite without warning?:No
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